PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'Age': '', 'Gender': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = time reproduction task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instruction
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    ImageComponent instruction_image
      image = دستورالعمل اصلی تسک.png
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_routine
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    PolygonComponent stim
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_duration_sec
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    ImageComponent cue_image
      image = دستورالعمل2.png
      size = (1.5, 1.5)
      startVal [time (s)] = $target_duration_sec
      units = norm
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    KeyboardComponent time_reproduction
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = $target_duration_sec
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  Routine Thank_you
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    TextComponent Thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for your attention.
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_file.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('target_duration_sec', 2.8)]),
      OrderedDict([('target_duration_sec', 3.0)]),
      OrderedDict([('target_duration_sec', 3.2)])]
    Routine trial_routine
  LoopTerminator trials
  Routine Thank_you
